// Patterns '<column>' are substituted by the respective values
// in the parameter CSV file generated by lib/config/elastix-asym-ffd-full.
//
// For direct comparison of elastix implementation of cubic B-spline FFD algorithm
// of Rueckert et al. (1999) to IRTK 'nreg', MIRTK 'register', and NiftyReg F3D.
// Options chosen to reflect as close as possible these other implementations.
//
// Main application of interest: Inter-subject brain MR image registration
// using T1-weighted images for adults and T2-weighted images for neonates.
// For [M]IRTK and NiftyReg, NMI with cubic B-spline Parzen window estimator
// is commonly used for this type of registration task.
//
// Version: elastix 4.8

(ShowExactMetricValue "false")
(UseFastAndLowMemoryVersion "true")
(UseDirectionCosines "true")

(WriteResultImage "false")
(ResultImagePixelType "short")
(ResultImageFormat "nii.gz")
(CompressResultImage "true")

(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingImageDimension 3)
(DefaultPixelValue <bg>)

(ErodeFixedMask "true")
(ErodeMovingMask "true")

(NumberOfResolutions <levels>)
(Registration "MultiMetricMultiResolutionRegistration")
(FixedImagePyramid "Fixed<pyramid>ImagePyramid")
(MovingImagePyramid "Moving<pyramid>ImagePyramid")
(Interpolator "<interp>Interpolator")
(ResampleInterpolator "Final<interp>Interpolator")
(BSplineInterpolationOrder 3)
(FinalBSplineInterpolationOrder 3)
(Resampler "DefaultResampler")

(FinalGridSpacingInPhysicalUnits <ds>)
(Transform "BSplineTransform")
(BSplineTransformSplineOrder 3)
(UseCyclicTransform "false")
(HowToCombineTransforms "Add") // IRTK model, see Rueckert et al. (1999)

(Metric "<sim>" "TransformBendingEnergyPenalty")
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)
(NumberOfHistogramBins <bins>)
(NumberOfFixedHistogramBins <bins>)
(NumberOfMovingHistogramBins <bins>)
(UseRelativeWeights "false")
(Metric0Weight 1)
(Metric1Weight <be>)

//(Optimizer "ConjugateGradientFRPR")
(Optimizer "<optim>")
(ConjugateGradientType "<cgtype>")
(MaximumNumberOfIterations <iters>)
(MaximumNumberOfLineSearchIterations <steps>)
(GenerateLineSearchIterations "false")
(StopIfWolfeNotSatisfied "true")
(UseAdaptiveStepSizes "true")
(StepLength <step>)

(ImageSampler "Full")
(NewSamplesEveryIteration "false")
(CheckNumberOfSamples "false")


// Other parameters set to the default values mentioned in the warning messages
(LineSearchGradientTolerance 0.9)
(LineSearchValueTolerance 0.0001)
(GradientMagnitudeTolerance 1e-06)
(ValueTolerance 1e-05)
(FixedLimitRangeRatio 0.01)
(MovingLimitRangeRatio 0.01)
(NumberOfSamplesForSelfHessian 100000)
